CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Burger King is a pipeline to automatically detect nuclei and the intensity of mitochondrial staining in living cells.', 'Drop your files with the channels 1 and 2 ending by C=0 and C=1 and correponding to TMRE and Nuclear staining, respectively.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_w(?P<wl>.*)_s(?P<Field_of_view>[0-9]{1,1})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain "RedDot")
    Name to assign these images:Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FITC")
    Name to assign these images:Electrical_potential
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['1) Nuclei detection', 'Identification of nuclei.']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
    Select the input image:Nuclei
    Name the primary objects to be identified:Nuclei_PO
    Typical diameter of objects, in pixel units (Min,Max):10,20
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
MeasureObjectSizeShape:[module_num:6|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notes:['1) Nuclei detection', 'Measurement of the size and shape of nuclei.']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
    Select objects to measure:Nuclei_PO
    Calculate the Zernike features?:No

FilterObjects:[module_num:7|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notes:['1) Nuclei detection', 'Excluding the nuclei that are not round enough. Fragmented nuclei might appear because of insufficient fluorescence signal to detect the nuclei.']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
    Name the output objects:Filtered_Nuclei_Area
    Select the object to filter:Nuclei_PO
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:Yes
    Maximum value:800

IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Filtered_Nuclei_Area
    Name the objects to be identified:EP_Originel
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:Electrical_potential
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.05
    Lower and upper bounds on threshold:0.0003,0.001
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyTertiaryObjects:[module_num:9|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notes:['2) Cellular mitochondrial population detection', 'Identification of mitochondria area']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
    Select the larger identified objects:EP_Originel
    Select the smaller identified objects:Filtered_Nuclei_Area
    Name the tertiary objects to be identified:Mitochondria
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Mitochondria
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:11|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notes:['2) Cellular mitochondrial population detection', 'Exclude the objects that might include several cells or too small']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
    Name the output objects:Mito_filtered
    Select the object to filter:Mitochondria
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:400
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.05
    Filter using a maximum measurement value?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Objects
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    Select the objects to save:Mito_filtered
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Electrical_potential
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mito_outlines
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:Spectral
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Objects
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    Select the objects to save:Mito_filtered
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Electrical_potential
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mito_colored
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Color
    Select colormap:Spectral
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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