CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['You need to extract the metadata to proceed to the generation of images']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Experiment>.*)_TL_w1roGFP2 480_s(?P<Site>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (metadata does C "0") (image does isstackframe)
    Name to assign these images:Marker
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1") (image does isstackframe)
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    Name to assign these objects:Mitoregions
    Select the image type:Objects
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    Retain outlines of loaded objects?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:FileLocation

ApplyThreshold:[module_num:5|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
    Select the input image:Marker
    Name the output image:ThreshMarker
    Select the output image type:Binary (black and white)
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.0001
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
MaskObjects:[module_num:6|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
    Select objects to be masked:Mitoregions
    Name the masked objects:Thresholded_Mitoregions
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThreshMarker
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:Yes
    Name the outline image:MaskedOutlines
    Invert the mask?:No

MeasureObjectIntensity:[module_num:7|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
    Hidden:1
    Select an image to measure:Marker
    Select objects to measure:Thresholded_Mitoregions

ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Users/guillaume/Documents/Results/Mitochondrial ROS in vitro/Glutamate effect/Whooper/Quantitative analysis/Results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Thresholded_Mitoregions|Intensity_MeanIntensity_Marker
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Thresholded_Mitoregions
    Combine these object measurements with those of the previous object?:No
    File name:20160404z6.csv
    Use the object name for the file name?:No
